PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = project
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
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Routines
  Routine first_image
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        ioServer.sendMessageEvent(text='%s' % ('win.units'), category='units')
      Begin Routine:
        ioServer.sendMessageEvent(text='%s' % ('start'), category='trial')
      End Routine:
        ioServer.sendMessageEvent(text='%s' % ('stop'), category='trial')
    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image
      image = stimuli\image_3.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_prompt
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        arr = ["right arrow", "plus", "right triangle", "6 point star", "rainbow", "pear", "heart", "speech bubble", "line", "cloud", "5 point star", "curve", "hexagon", "pineapple", "icicle", "rounded rectangle", "left arrow", "lightning bolt", "up arrow", "circle", "4 point star", "triangle", "droplet", "umbrella", "apple", "down arrow", "pentagon", "bananas", "square", "lemon", "diamond"]
        random = random.randint(0,30)
        variable = arr[random]
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"You will be shown a grid of pictures.\n\nYour task is to find the " + variable + ". \n\nPress the space bar to show the image.\nOnce you have found it, press the space bar again to continue."
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_image
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        ioServer.sendMessageEvent(text='%s' % ('win.units'), category='units')
      Begin Routine:
        ioServer.sendMessageEvent(text='%s' % ('start'), category='trial')
      End Routine:
        ioServer.sendMessageEvent(text='%s' % ('stop'), category='trial')
    EyetrackerRecordComponent etRecord_2
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image_2
      image = stimuli\final_shape.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_prompt
    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        import random
        arr = ["right arrow", "plus", "right triangle", "6 point star", "rainbow", "pear", "heart", "speech bubble", "line", "cloud", "5 point star", "curve", "hexagon", "pineapple", "icicle", "rounded rectangle", "left arrow", "lightning bolt", "up arrow", "circle", "4 point star", "triangle", "droplet", "umbrella", "apple", "down arrow", "pentagon", "bananas", "square", "lemon", "diamond"]
        random = random.randint(0,30)
        variable = arr[random]
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $"You will be shown a grid of words. \nYour task is to find the word:\n\n\"" + variable + "\"\n\nPress the space bar to show the grid.\nOnce you have found the word, press the space bar again to continue."
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.0
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 0.5
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.0
    targetLayout = FIVE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine first_prompt
  Routine first_image
  Routine second_prompt
  Routine second_image
